'=============================================================================
'
'  Stratus AS3935 Lightning Detection System
'  Site: QUAGGASKLIP
'
'  Property of METRON (PTY) LTD [Inteltronics]
'  Developer: L.J. Esterhuizen
'
'=============================================================================
' Stores distance, energy and the row timestamp.
'
' WIRING, Terminal 2 Click in socket 2 of the Pi 2 Click Shield
'
'   Pi BCM 26   ->  C2      lightning records
'   Pi BCM 19   ->  P_SW    strike pulse
'   Pi GND      ->  G       
'
' C1/C2 use RS-232 logic, inverted with respect to TTL. The detector inverts in
' software to match: lightning_config.json has campbell_uart_invert true.
' Plain TTL will not be received. After editing that file:
' sudo systemctl restart lightning-detector
'
' Record: L,<distance_km>,<energy> CR LF, 9600 baud 8N1. distance -1 when the
' strike could not be ranged.
'=============================================================================

Const SCAN_MS = 200
Const LF = 10
Const CR_CODE = 13
Const MAX_CHARS = 48

Public LastDistanceKm As Float
Public LastEnergy As Long

Public StrikeCount As Long
Public ParseErrorCount As Long
Public PulseCountTotal As Float
Public SerialOpenOK As Boolean
Public LastRecord As String * 64

Dim Parsed(2) As Float
Dim Payload As String * 64
Dim PulseScan As Float
Dim RecLen As Long
Dim LPos As Long

DataTable (LightningEvents, True, -1)
  Sample (1, LastDistanceKm, FP2)
  Sample (1, LastEnergy, Long)
EndTable

BeginProg

  SerialOpenOK = SerialOpen (ComC2_Rx, 9600, 3, 0, 256)
  SerialFlush (ComC2_Rx)

  Scan (SCAN_MS, mSec, 0, 0)

    PulseCount (PulseScan, 1, P_SW, 2, 0, 1, 0)
    PulseCountTotal = PulseCountTotal + PulseScan

    LastRecord = ""
    SerialIn (LastRecord, ComC2_Rx, 1, LF, MAX_CHARS)
    RecLen = Len (LastRecord)

    If RecLen > 1 Then

      LPos = InStr (1, LastRecord, "L,", 2)

      ' A complete record ends in CR. Without this test a record split across
      ' two scans would store as a genuine strike at the wrong energy.
      If LPos > 0 AND Mid (LastRecord, RecLen, 1) = CHR (CR_CODE) Then

        Payload = Mid (LastRecord, LPos + 2, MAX_CHARS)

        ' SplitOption 0 is numeric: every character except + - . 0-9 and E is a
        ' delimiter, so the trailing CR costs no slot.
        SplitStr (Parsed(1), Payload, "", 2, 0)

        ' x = x is false only for NAN.
        If Parsed(1) = Parsed(1) AND Parsed(2) = Parsed(2) Then
          LastDistanceKm = Parsed(1)
          LastEnergy = Parsed(2)
          StrikeCount = StrikeCount + 1
          CallTable LightningEvents
        Else
          ParseErrorCount = ParseErrorCount + 1
        EndIf

      Else
        ParseErrorCount = ParseErrorCount + 1
      EndIf
    EndIf

  NextScan
EndProg
